PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['编号*'], expName, expInfo['date'])
  Experiment info = {'编号*': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli\\0-3-1.jpg', 'stimuli\\0-3-2.jpg', 'stimuli\\0-3-4.jpg', 'stimuli\\0-3-8.jpg', 'stimuli\\0-3-10.jpg', 'stimuli\\0-3-12.jpg', 'stimuli\\0-3-15.jpg', 'stimuli\\0-3-16.jpg', 'stimuli\\0-3-17.jpg', 'stimuli\\0-3-18.jpg', 'stimuli\\0-3-19.jpg', 'stimuli\\0-3-20.jpg', 'stimuli\\0-6-1.jpg', 'stimuli\\0-6-6.jpg', 'stimuli\\0-6-7.jpg', 'stimuli\\0-6-9.jpg', 'stimuli\\0-6-11.jpg', 'stimuli\\0-6-13.jpg', 'stimuli\\0-6-15.jpg', 'stimuli\\0-6-16.jpg', 'stimuli\\0-6-17.jpg', 'stimuli\\0-6-18.jpg', 'stimuli\\0-6-19.jpg', 'stimuli\\0-6-20.jpg', 'stimuli\\0-9-3.jpg', 'stimuli\\0-9-5.jpg', 'stimuli\\0-9-6.jpg', 'stimuli\\0-9-8.jpg', 'stimuli\\0-9-10.jpg', 'stimuli\\0-9-11.jpg', 'stimuli\\0-9-12.jpg', 'stimuli\\0-9-14.jpg', 'stimuli\\0-9-15.jpg', 'stimuli\\0-9-16.jpg', 'stimuli\\0-9-17.jpg', 'stimuli\\0-9-20.jpg', 'stimuli\\0-10-1.jpg', 'stimuli\\0-10-2.jpg', 'stimuli\\0-10-3.jpg', 'stimuli\\0-10-5.jpg', 'stimuli\\0-10-6.jpg', 'stimuli\\0-10-8.jpg', 'stimuli\\0-10-11.jpg', 'stimuli\\0-10-12.jpg', 'stimuli\\0-10-13.jpg', 'stimuli\\0-10-15.jpg', 'stimuli\\0-10-18.jpg', 'stimuli\\0-10-19.jpg', 'stimuli\\0-15-3.jpg', 'stimuli\\0-15-4.jpg', 'stimuli\\0-15-5.jpg', 'stimuli\\0-15-6.jpg', 'stimuli\\0-15-7.jpg', 'stimuli\\0-15-9.jpg', 'stimuli\\0-15-10.jpg', 'stimuli\\0-15-11.jpg', 'stimuli\\0-15-14.jpg', 'stimuli\\0-15-17.jpg', 'stimuli\\0-15-18.jpg', 'stimuli\\0-15-20.jpg', 'stimuli\\0-17-1.jpg', 'stimuli\\0-17-3.jpg', 'stimuli\\0-17-5.jpg', 'stimuli\\0-17-7.jpg', 'stimuli\\0-17-10.jpg', 'stimuli\\0-17-11.jpg', 'stimuli\\0-17-12.jpg', 'stimuli\\0-17-14.jpg', 'stimuli\\0-17-16.jpg', 'stimuli\\0-17-17.jpg', 'stimuli\\0-17-19.jpg', 'stimuli\\0-17-20.jpg', 'stimuli\\0-18-1.jpg', 'stimuli\\0-18-2.jpg', 'stimuli\\0-18-4.jpg', 'stimuli\\0-18-6.jpg', 'stimuli\\0-18-8.jpg', 'stimuli\\0-18-9.jpg', 'stimuli\\0-18-10.jpg', 'stimuli\\0-18-13.jpg', 'stimuli\\0-18-14.jpg', 'stimuli\\0-18-17.jpg', 'stimuli\\0-18-18.jpg', 'stimuli\\0-18-19.jpg', 'stimuli\\0-20-3.jpg', 'stimuli\\0-20-6.jpg', 'stimuli\\0-20-7.jpg', 'stimuli\\0-20-8.jpg', 'stimuli\\0-20-9.jpg', 'stimuli\\0-20-12.jpg', 'stimuli\\0-20-13.jpg', 'stimuli\\0-20-15.jpg', 'stimuli\\0-20-17.jpg', 'stimuli\\0-20-18.jpg', 'stimuli\\0-20-19.jpg', 'stimuli\\0-20-20.jpg', 'stimuli\\0-25-1.jpg', 'stimuli\\0-25-4.jpg', 'stimuli\\0-25-6.jpg', 'stimuli\\0-25-9.jpg', 'stimuli\\0-25-11.jpg', 'stimuli\\0-25-12.jpg', 'stimuli\\0-25-13.jpg', 'stimuli\\0-25-16.jpg', 'stimuli\\0-25-17.jpg', 'stimuli\\0-25-18.jpg', 'stimuli\\0-25-19.jpg', 'stimuli\\0-25-20.jpg', 'stimuli\\0-26-1.jpg', 'stimuli\\0-26-2.jpg', 'stimuli\\0-26-3.jpg', 'stimuli\\0-26-4.jpg', 'stimuli\\0-26-5.jpg', 'stimuli\\0-26-7.jpg', 'stimuli\\0-26-8.jpg', 'stimuli\\0-26-12.jpg', 'stimuli\\0-26-14.jpg', 'stimuli\\0-26-15.jpg', 'stimuli\\0-26-16.jpg', 'stimuli\\0-26-20.jpg', 'stimuli\\1-2-3.jpg', 'stimuli\\1-2-8.jpg', 'stimuli\\1-2-9.jpg', 'stimuli\\1-2-10.jpg', 'stimuli\\1-2-11.jpg', 'stimuli\\1-2-12.jpg', 'stimuli\\1-2-14.jpg', 'stimuli\\1-2-15.jpg', 'stimuli\\1-2-16.jpg', 'stimuli\\1-2-17.jpg', 'stimuli\\1-2-18.jpg', 'stimuli\\1-2-19.jpg', 'stimuli\\1-4-1.jpg', 'stimuli\\1-4-4.jpg', 'stimuli\\1-4-5.jpg', 'stimuli\\1-4-6.jpg', 'stimuli\\1-4-7.jpg', 'stimuli\\1-4-9.jpg', 'stimuli\\1-4-10.jpg', 'stimuli\\1-4-11.jpg', 'stimuli\\1-4-13.jpg', 'stimuli\\1-4-15.jpg', 'stimuli\\1-4-16.jpg', 'stimuli\\1-4-18.jpg', 'stimuli\\1-7-1.jpg', 'stimuli\\1-7-2.jpg', 'stimuli\\1-7-4.jpg', 'stimuli\\1-7-5.jpg', 'stimuli\\1-7-6.jpg', 'stimuli\\1-7-7.jpg', 'stimuli\\1-7-9.jpg', 'stimuli\\1-7-10.jpg', 'stimuli\\1-7-13.jpg', 'stimuli\\1-7-14.jpg', 'stimuli\\1-7-18.jpg', 'stimuli\\1-7-19.jpg', 'stimuli\\1-8-1.jpg', 'stimuli\\1-8-2.jpg', 'stimuli\\1-8-3.jpg', 'stimuli\\1-8-5.jpg', 'stimuli\\1-8-8.jpg', 'stimuli\\1-8-9.jpg', 'stimuli\\1-8-11.jpg', 'stimuli\\1-8-12.jpg', 'stimuli\\1-8-13.jpg', 'stimuli\\1-8-15.jpg', 'stimuli\\1-8-16.jpg', 'stimuli\\1-8-20.jpg', 'stimuli\\1-14-3.jpg', 'stimuli\\1-14-4.jpg', 'stimuli\\1-14-6.jpg', 'stimuli\\1-14-7.jpg', 'stimuli\\1-14-10.jpg', 'stimuli\\1-14-11.jpg', 'stimuli\\1-14-12.jpg', 'stimuli\\1-14-13.jpg', 'stimuli\\1-14-14.jpg', 'stimuli\\1-14-16.jpg', 'stimuli\\1-14-17.jpg', 'stimuli\\1-14-20.jpg', 'stimuli\\1-16-1.jpg', 'stimuli\\1-16-2.jpg', 'stimuli\\1-16-3.jpg', 'stimuli\\1-16-4.jpg', 'stimuli\\1-16-5.jpg', 'stimuli\\1-16-6.jpg', 'stimuli\\1-16-8.jpg', 'stimuli\\1-16-9.jpg', 'stimuli\\1-16-15.jpg', 'stimuli\\1-16-18.jpg', 'stimuli\\1-16-19.jpg', 'stimuli\\1-16-20.jpg', 'stimuli\\1-21-1.jpg', 'stimuli\\1-21-2.jpg', 'stimuli\\1-21-3.jpg', 'stimuli\\1-21-4.jpg', 'stimuli\\1-21-7.jpg', 'stimuli\\1-21-8.jpg', 'stimuli\\1-21-10.jpg', 'stimuli\\1-21-11.jpg', 'stimuli\\1-21-14.jpg', 'stimuli\\1-21-18.jpg', 'stimuli\\1-21-19.jpg', 'stimuli\\1-21-20.jpg', 'stimuli\\1-22-1.jpg', 'stimuli\\1-22-3.jpg', 'stimuli\\1-22-5.jpg', 'stimuli\\1-22-7.jpg', 'stimuli\\1-22-8.jpg', 'stimuli\\1-22-11.jpg', 'stimuli\\1-22-13.jpg', 'stimuli\\1-22-15.jpg', 'stimuli\\1-22-16.jpg', 'stimuli\\1-22-17.jpg', 'stimuli\\1-22-18.jpg', 'stimuli\\1-22-20.jpg', 'stimuli\\1-23-1.jpg', 'stimuli\\1-23-2.jpg', 'stimuli\\1-23-3.jpg', 'stimuli\\1-23-5.jpg', 'stimuli\\1-23-8.jpg', 'stimuli\\1-23-9.jpg', 'stimuli\\1-23-10.jpg', 'stimuli\\1-23-11.jpg', 'stimuli\\1-23-16.jpg', 'stimuli\\1-23-18.jpg', 'stimuli\\1-23-19.jpg', 'stimuli\\1-23-20.jpg', 'stimuli\\1-24-1.jpg', 'stimuli\\1-24-3.jpg', 'stimuli\\1-24-4.jpg', 'stimuli\\1-24-5.jpg', 'stimuli\\1-24-7.jpg', 'stimuli\\1-24-8.jpg', 'stimuli\\1-24-9.jpg', 'stimuli\\1-24-11.jpg', 'stimuli\\1-24-13.jpg', 'stimuli\\1-24-15.jpg', 'stimuli\\1-24-18.jpg', 'stimuli\\1-24-20.jpg', 'stimuli\\attention.jpg', 'stimuli\\attention_7.jpg', 'all_faces.json', 'all_faces.xlsx', 'blank.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = experiment3_1
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Routines
  Routine instruction
    TextComponent instru_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        欢迎参加本次实验！
        在实验中，你将扮演某二手交易平台上的买家。
        平台会给您提供某些卖家的个人照片。
        请你根据卖家的个人照片判断该卖家的可信度，
        以决定是否愿意与其进行交易（如购买课本、租借物品等）。

        请按空格键继续。
    CodeComponent code_instru
      Code Type = Both
      Begin Experiment:
        # 导入必要的库
        import random
        import pandas as pd
        import os
        import numpy as np


        current_img = "blank.png"
        # 读取刺激列表
        stim_file = 'all_faces.xlsx'
        faces_df = pd.read_excel(stim_file)

        # 分离男性和女性面孔
        male_faces = faces_df[faces_df['gender'] == 'male'].sort_values(by='range', ascending=False).reset_index(drop=True)
        female_faces = faces_df[faces_df['gender'] == 'female'].sort_values(by='range', ascending=False).reset_index(drop=True)

        # 获取参与者编号，用于确定配对方式
        participant_id = int(expInfo["编号*"])

        # 初始化存储trials数据的列表
        trials_data = []

        # 处理男性面孔
        for i in range(0, len(male_faces), 2):
            if i + 1 < len(male_faces):  # 确保有配对的人物
                face1 = male_faces.iloc[i]
                face2 = male_faces.iloc[i+1]

                # 根据被试编号和配对索引决定分配方式
                if (participant_id + i//2) % 2 == 0:
                    # 人物1到条件1，人物2到条件2
                    trials_data.append({**face1.to_dict(), 'condition': 1})
                    trials_data.append({**face2.to_dict(), 'condition': 2})
                else:
                    # 人物1到条件2，人物2到条件1
                    trials_data.append({**face1.to_dict(), 'condition': 2})
                    trials_data.append({**face2.to_dict(), 'condition': 1})

        # 处理女性面孔，使用相同的逻辑
        for i in range(0, len(female_faces), 2):
            if i + 1 < len(female_faces):  # 确保有配对的人物
                face1 = female_faces.iloc[i]
                face2 = female_faces.iloc[i+1]

                # 根据被试编号和配对索引决定分配方式
                if (participant_id + i//2) % 2 == 0:
                    trials_data.append({**face1.to_dict(), 'condition': 1})
                    trials_data.append({**face2.to_dict(), 'condition': 2})
                else:
                    trials_data.append({**face1.to_dict(), 'condition': 2})
                    trials_data.append({**face2.to_dict(), 'condition': 1})

        # 转换为数据框并随机化试次顺序
        trials_df = pd.DataFrame(trials_data)
        trials_df = trials_df.sample(frac=1).reset_index(drop=True)  # 随机化试次顺序

        # 检查两个条件下的性别平衡情况
        condition1 = trials_df[trials_df['condition'] == 1]
        condition2 = trials_df[trials_df['condition'] == 2]

        # 打印平衡检查结果
        print(f"条件1: 男性 = {sum(condition1['gender'] == 'male')}, 女性 = {sum(condition1['gender'] == 'female')}")
        print(f"条件2: 男性 = {sum(condition2['gender'] == 'male')}, 女性 = {sum(condition2['gender'] == 'female')}")
        print(f"条件1 平均range: {condition1['range'].mean():.2f}")
        print(f"条件2 平均range: {condition2['range'].mean():.2f}")

        # 保存为临时文件供TrialHandler使用
        temp_trials_file = os.path.join('data', f'temp_trials_{expInfo["编号*"]}.csv')
        trials_df.to_csv(temp_trials_file, index=False)

        # 设置为全局变量，供后续使用
        thisExp.extraInfo['trials_file'] = temp_trials_file

        # 创建全局字典存储评分和确定性
        T1_ratings = {}
        T1_confidence = {}
      Begin JS Experiment:
        // 初始化全局变量
        var current_img = "blank.png";

        // 读取刺激列表 - 在线上实验中，您需要确保Excel文件已转换为JSON格式
        // 假设您已经将all_faces.xlsx转换为JSON格式并通过资源加载
        var faces_df = []; // 这里应该是您的面孔数据

        window.faces_df = [
            {
                "identity": 6,
                "gender": "male",
                "high_trust_img": "stimuli/0-6-11.jpg",
                "low_trust_img": "stimuli/0-6-1.jpg",
                "range": 1.53125
            },
            {
                "identity": 26,
                "gender": "male",
                "high_trust_img": "stimuli/0-26-12.jpg",
                "low_trust_img": "stimuli/0-26-3.jpg",
                "range": 1.59375
            },
            {
                "identity": 2,
                "gender": "female",
                "high_trust_img": "stimuli/1-2-3.jpg",
                "low_trust_img": "stimuli/1-2-9.jpg",
                "range": 1.6875
            },
            {
                "identity": 21,
                "gender": "female",
                "high_trust_img": "stimuli/1-21-18.jpg",
                "low_trust_img": "stimuli/1-21-2.jpg",
                "range": 1.6875
            },
            {
                "identity": 10,
                "gender": "male",
                "high_trust_img": "stimuli/0-10-6.jpg",
                "low_trust_img": "stimuli/0-10-13.jpg",
                "range": 1.8125
            },
            {
                "identity": 4,
                "gender": "female",
                "high_trust_img": "stimuli/1-4-13.jpg",
                "low_trust_img": "stimuli/1-4-6.jpg",
                "range": 2.0
            },
            {
                "identity": 17,
                "gender": "male",
                "high_trust_img": "stimuli/0-17-11.jpg",
                "low_trust_img": "stimuli/0-17-3.jpg",
                "range": 0.6875
            },
            {
                "identity": 22,
                "gender": "female",
                "high_trust_img": "stimuli/1-22-1.jpg",
                "low_trust_img": "stimuli/1-22-8.jpg",
                "range": 0.6875
            },
            {
                "identity": 9,
                "gender": "male",
                "high_trust_img": "stimuli/0-9-3.jpg",
                "low_trust_img": "stimuli/0-9-20.jpg",
                "range": 0.78125
            },
            {
                "identity": 14,
                "gender": "female",
                "high_trust_img": "stimuli/1-14-7.jpg",
                "low_trust_img": "stimuli/1-14-10.jpg",
                "range": 0.875
            },
            {
                "identity": 20,
                "gender": "male",
                "high_trust_img": "stimuli/0-20-6.jpg",
                "low_trust_img": "stimuli/0-20-19.jpg",
                "range": 0.90625
            },
            {
                "identity": 3,
                "gender": "male",
                "high_trust_img": "stimuli/0-3-4.jpg",
                "low_trust_img": "stimuli/0-3-16.jpg",
                "range": 0.96875
            },
            {
                "identity": 25,
                "gender": "male",
                "high_trust_img": "stimuli/0-25-20.jpg",
                "low_trust_img": "stimuli/0-25-13.jpg",
                "range": 1.15625
            },
            {
                "identity": 15,
                "gender": "male",
                "high_trust_img": "stimuli/0-15-4.jpg",
                "low_trust_img": "stimuli/0-15-18.jpg",
                "range": 1.1875
            },
            {
                "identity": 18,
                "gender": "male",
                "high_trust_img": "stimuli/0-18-9.jpg",
                "low_trust_img": "stimuli/0-18-18.jpg",
                "range": 1.1875
            },
            {
                "identity": 23,
                "gender": "female",
                "high_trust_img": "stimuli/1-23-19.jpg",
                "low_trust_img": "stimuli/1-23-8.jpg",
                "range": 1.28125
            },
            {
                "identity": 8,
                "gender": "female",
                "high_trust_img": "stimuli/1-8-11.jpg",
                "low_trust_img": "stimuli/1-8-15.jpg",
                "range": 1.375
            },
            {
                "identity": 24,
                "gender": "female",
                "high_trust_img": "stimuli/1-24-13.jpg",
                "low_trust_img": "stimuli/1-24-5.jpg",
                "range": 1.40625
            },
            {
                "identity": 7,
                "gender": "female",
                "high_trust_img": "stimuli/1-7-18.jpg",
                "low_trust_img": "stimuli/1-7-1.jpg",
                "range": 1.46875
            },
            {
                "identity": 16,
                "gender": "female",
                "high_trust_img": "stimuli/1-16-2.jpg",
                "low_trust_img": "stimuli/1-16-1.jpg",
                "range": 1.5
            }
            // ... 添加您的所有数据
        ];

        // 分离男性和女性面孔
        var male_faces = faces_df.filter(face => face.gender === 'male')
                                .sort((a, b) => b.range - a.range); // 按range降序排列
        var female_faces = faces_df.filter(face => face.gender === 'female')
                                  .sort((a, b) => b.range - a.range); // 按range降序排列

        // 获取参与者编号
        var participant_id = parseInt(expInfo["编号*"]);

        // 初始化存储trials数据的数组
        var trials_data = [];

        // 处理男性面孔
        for (let i = 0; i < male_faces.length; i += 2) {
            if (i + 1 < male_faces.length) { // 确保有配对的人物
                var face1 = male_faces[i];
                var face2 = male_faces[i + 1];

                // 根据被试编号和配对索引决定分配方式
                if ((participant_id + Math.floor(i/2)) % 2 === 0) {
                    // 人物1到条件1，人物2到条件2
                    trials_data.push({...face1, condition: 1});
                    trials_data.push({...face2, condition: 2});
                } else {
                    // 人物1到条件2，人物2到条件1
                    trials_data.push({...face1, condition: 2});
                    trials_data.push({...face2, condition: 1});
                }
            }
        }

        // 处理女性面孔，使用相同的逻辑
        for (let i = 0; i < female_faces.length; i += 2) {
            if (i + 1 < female_faces.length) { // 确保有配对的人物
                var face1 = female_faces[i];
                var face2 = female_faces[i + 1];

                // 根据被试编号和配对索引决定分配方式
                if ((participant_id + Math.floor(i/2)) % 2 === 0) {
                    trials_data.push({...face1, condition: 1});
                    trials_data.push({...face2, condition: 2});
                } else {
                    trials_data.push({...face1, condition: 2});
                    trials_data.push({...face2, condition: 1});
                }
            }
        }

        // 随机化试次顺序
        function shuffleArray(array) {
            var shuffled = [...array];
            for (let i = shuffled.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [shuffled[i], shuffled[j]] = [shuffled[j], shuffled[i]];
            }
            return shuffled;
        }

        trials_data = shuffleArray(trials_data);

        // 检查两个条件下的性别平衡情况
        var condition1 = trials_data.filter(trial => trial.condition === 1);
        var condition2 = trials_data.filter(trial => trial.condition === 2);

        // 计算性别分布
        var condition1_male = condition1.filter(trial => trial.gender === 'male').length;
        var condition1_female = condition1.filter(trial => trial.gender === 'female').length;
        var condition2_male = condition2.filter(trial => trial.gender === 'male').length;
        var condition2_female = condition2.filter(trial => trial.gender === 'female').length;

        // 计算平均range
        var condition1_avg_range = condition1.reduce((sum, trial) => sum + trial.range, 0) / condition1.length;
        var condition2_avg_range = condition2.reduce((sum, trial) => sum + trial.range, 0) / condition2.length;

        // 打印平衡检查结果（在线上实验中可能需要使用console.log）
        console.log(`条件1: 男性 = ${condition1_male}, 女性 = ${condition1_female}`);
        console.log(`条件2: 男性 = ${condition2_male}, 女性 = ${condition2_female}`);
        console.log(`条件1 平均range: ${condition1_avg_range.toFixed(2)}`);
        console.log(`条件2 平均range: ${condition2_avg_range.toFixed(2)}`);

        // 在线上实验中，您可能需要将数据存储在全局变量中而不是文件
        // 设置全局变量供后续使用
        psychoJS.experiment.extraInfo['trials_file'] = trials_data;

        // 创建全局字典存储评分和确定性
        var T1_ratings = {};
        var T1_confidence = {};

        // 确保变量被添加到全局作用域
        window.T1_ratings = T1_ratings;
        window.T1_confidence = T1_confidence;
        window.trials_data = trials_data;
        thisExp.extraInfo = thisExp.extraInfo || {};
        thisExp.extraInfo['trials_file'] = trials_data;

        // 如果需要创建TrialHandler，可以使用以下方式：
        // var trialHandler = new data.TrialHandler({
        //     trialList: trials_data,
        //     nReps: 1,
        //     method: data.TrialHandler.Method.SEQUENTIAL
        // });
    KeyboardComponent instru_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine image1
    CodeComponent code_t1
      Code Type = Both
      Begin JS Routine:
        // 根据条件选择对应的图片
        if (thisTrial['condition'] === 1) {
            current_img = thisTrial['high_trust_img'];  // 高可信面孔
        } else {
            current_img = thisTrial['low_trust_img'];  // 低可信面孔
        }

        // 记录当前trial的信息，供下个routine使用
        psychoJS.experiment.addData('first_image', current_img);
        psychoJS.experiment.addData('identity', thisTrial['identity']);
        psychoJS.experiment.addData('condition', thisTrial['condition']);
      Begin Routine:
        # Begin Routine

        if thisTrial['condition'] == 1:
            current_img = thisTrial['high_trust_img']  # 高可信面孔
        else:
            current_img = thisTrial['low_trust_img']  # 低可信面孔

        # 记录当前trial的信息，供下个routine使用
        thisExp.addData('first_image', current_img)
        thisExp.addData('identity', thisTrial['identity'])
        thisExp.addData('condition', thisTrial['condition'])
      End JS Routine:
        // 将按键转换为数字评分
        var t1_rating = null;
        if (rating_T1_keys.keys && rating_T1_keys.keys.length > 0) {
            // 获取最后一次按键
            var lastKey = rating_T1_keys.keys[rating_T1_keys.keys.length - 1];
            t1_rating = parseInt(lastKey);
        } else {
            t1_rating = null;
        }

        // 保存评分到全局字典
        window.T1_ratings[String(thisTrial['identity'])] = t1_rating;

        // 保存评分到数据文件
        psychoJS.experiment.addData('rating_T1', t1_rating);
      End Routine:
        # 将按键转换为数字评分
        if rating_T1_keys.keys:
            t1_rating = int(rating_T1_keys.keys)
        else:
            t1_rating = None

        # 保存评分到全局字典
        T1_ratings[str(thisTrial['identity'])] = t1_rating

        # 保存评分到数据文件
        thisExp.addData('rating_T1', t1_rating)
    TextComponent img1_instr
      letterHeight = 0.03
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = 你愿意与这位卖家进行交易吗？
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    ImageComponent image_t1
      image [set every repeat] = $current_img
      pos = (0, 0.1)
      size = (0.27, 0.37)
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_T1_keys
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent slider_image
      image = slider.jpg
      pos = (0, -0.37)
      size = (0.9, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent img1_one
      letterHeight = 0.02
      pos = (-0.45, -0.27)
      startVal [time (s)] = 0.0
      text = 非常不愿意
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    TextComponent img1_three
      letterHeight = 0.02
      pos = (-0.225, -0.27)
      startVal [time (s)] = 0.0
      text = 比较不愿意
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    TextComponent img1_five
      letterHeight = 0.02
      pos = (0, -0.27)
      startVal [time (s)] = 0.0
      text = 中立
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    TextComponent img1_seven
      letterHeight = 0.02
      pos = (0.225, -0.27)
      startVal [time (s)] = 0.0
      text = 比较愿意
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    TextComponent img1_nine
      letterHeight = 0.02
      pos = (0.45, -0.27)
      startVal [time (s)] = 0.0
      text = 非常愿意
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  Routine image2
    CodeComponent code_t2
      Code Type = Both
      Begin JS Routine:
        // 根据条件决定显示哪张图片
        if (thisTrial['condition'] === 1) {
            current_img = thisTrial['low_trust_img'];  // 低可信面孔
        } else {
            current_img = thisTrial['high_trust_img'];  // 高可信面孔
        }

        // 记录当前trial的第二张图片
        psychoJS.experiment.addData('second_image', current_img);
      Begin Routine:
        # Begin Routine


        # 根据条件决定显示哪张图片
        if thisTrial['condition'] == 1:
            current_img = thisTrial['low_trust_img']  # 低可信面孔
        else:
            current_img = thisTrial['high_trust_img']  # 高可信面孔

        # 记录当前trial的第二张图片
        thisExp.addData('second_image', current_img)
      End JS Routine:
        // End Routine

        // 获取T1的评分（从全局字典中）
        var t1_rating = null;
        if (typeof T1_ratings !== 'undefined' && T1_ratings[String(thisTrial['identity'])]) {
            t1_rating = T1_ratings[String(thisTrial['identity'])];
        }

        // 获取T2评分
        var t2_rating = null;
        if (rating_T2_keys && rating_T2_keys.keys) {
            if (Array.isArray(rating_T2_keys.keys)) {
                // 如果keys是数组，取最后一次按键
                if (rating_T2_keys.keys.length > 0) {
                    var lastKey = rating_T2_keys.keys[rating_T2_keys.keys.length - 1];
                    t2_rating = parseInt(lastKey);
                }
            } else {
                // 如果keys是单个值
                t2_rating = parseInt(rating_T2_keys.keys);
            }
        }

        // 计算评分变化（需要防止null值）
        var rating_change = null;
        if (t1_rating !== null && t2_rating !== null) {
            rating_change = t2_rating - t1_rating;
        }

        // 保存数据到实验文件
        psychoJS.experiment.addData('rating_T2', t2_rating);
        psychoJS.experiment.addData('rating_change', rating_change);

        // 记录反应时间（可选）
        if (rating_T2_keys && rating_T2_keys.rt) {
            var t2_rt = Array.isArray(rating_T2_keys.rt) ?
                        rating_T2_keys.rt[rating_T2_keys.rt.length - 1] :
                        rating_T2_keys.rt;
            psychoJS.experiment.addData('rating_T2_rt', t2_rt);
        }
      End Routine:
        # End Routine
        # 获取T1的评分
        t1_rating = T1_ratings[str(thisTrial['identity'])]

        # 获取T2评分
        if rating_T2_keys.keys:
            t2_rating = int(rating_T2_keys.keys)
        else:
            t2_rating = None

        # 计算评分变化（需要防止None值）
        if t1_rating is not None and t2_rating is not None:
            rating_change = t2_rating - t1_rating
        else:
            rating_change = None

        # 保存数据
        thisExp.addData('rating_T2', t2_rating)
        thisExp.addData('rating_change', rating_change)
    TextComponent img2_instr
      letterHeight = 0.03
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = 你愿意与这位卖家进行交易吗？
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    ImageComponent image_t2
      image [set every repeat] = $current_img
      pos = (0, 0.1)
      size = (0.27, 0.37)
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_T2_keys
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent slider_image_t2
      image = slider.jpg
      pos = (0, -0.37)
      size = (0.9, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent img2_one
      letterHeight = 0.02
      pos = (-0.45, -0.27)
      startVal [time (s)] = 0.0
      text = 非常不愿意
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    TextComponent img2_three
      letterHeight = 0.02
      pos = (-0.225, -0.27)
      startVal [time (s)] = 0.0
      text = 比较不愿意
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    TextComponent img2_five
      letterHeight = 0.02
      pos = (0, -0.27)
      startVal [time (s)] = 0.0
      text = 中立
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    TextComponent img2_seven
      letterHeight = 0.02
      pos = (0.225, -0.27)
      startVal [time (s)] = 0.0
      text = 比较愿意
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    TextComponent img2_nine
      letterHeight = 0.02
      pos = (0.45, -0.27)
      startVal [time (s)] = 0.0
      text = 非常愿意
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  Routine end
    TextComponent end_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = 感谢您参与本次研究！请按空格键退出。
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    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent fixation_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine confidence_2
    TextComponent confidence2_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = 您对刚才的可信度评分有多确定？
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    KeyboardComponent confidence_T2_keys
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent slider_confidence_t2
      image = slider.jpg
      pos = (0, -0.37)
      size = (0.9, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent confidence_T2_code
      Code Type = Both
      End JS Routine:
        // 处理第二次置信度评分

        // 获取T2置信度评分
        var conf_rating = null;
        if (confidence_T2_keys && confidence_T2_keys.keys) {
            if (Array.isArray(confidence_T2_keys.keys)) {
                // 如果keys是数组，取最后一次按键
                if (confidence_T2_keys.keys.length > 0) {
                    var lastKey = confidence_T2_keys.keys[confidence_T2_keys.keys.length - 1];
                    conf_rating = parseInt(lastKey);
                }
            } else {
                // 如果keys是单个值
                conf_rating = parseInt(confidence_T2_keys.keys);
            }
        }

        // 获取T1评分的确定性（JavaScript中没有.get()方法，需要手动检查）
        var t1_conf = null;
        var identity_key = String(thisTrial['identity']);
        if (typeof T1_confidence !== 'undefined' && T1_confidence.hasOwnProperty(identity_key)) {
            t1_conf = T1_confidence[identity_key];
        }

        // 计算确定性变化
        var conf_change = null;
        if (t1_conf !== null && conf_rating !== null) {
            conf_change = conf_rating - t1_conf;
        }

        // 保存数据到实验文件
        psychoJS.experiment.addData('confidence_T2', conf_rating);
        psychoJS.experiment.addData('confidence_change', conf_change);
      End Routine:
        if confidence_T2_keys.keys:
            conf_rating = int(confidence_T2_keys.keys)
        else:
            conf_rating = None

        # 获取T1评分的确定性
        t1_conf = T1_confidence.get(str(thisTrial['identity']), None)

        # 计算确定性变化
        if t1_conf is not None and conf_rating is not None:
            conf_change = conf_rating - t1_conf
        else:
            conf_change = None

        # 保存数据
        thisExp.addData('confidence_T2', conf_rating)
        thisExp.addData('confidence_change', conf_change)
    TextComponent con2_one
      letterHeight = 0.02
      pos = (-0.45, -0.27)
      startVal [time (s)] = 0.0
      text = 非常不确定
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    TextComponent con2_three
      letterHeight = 0.02
      pos = (-0.225, -0.27)
      startVal [time (s)] = 0.0
      text = 比较不确定
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    TextComponent con2_five
      letterHeight = 0.02
      pos = (0, -0.27)
      startVal [time (s)] = 0.0
      text = 中立
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    TextComponent con2_seven
      letterHeight = 0.02
      pos = (0.225, -0.27)
      startVal [time (s)] = 0.0
      text = 比较确定
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    TextComponent con2_nine
      letterHeight = 0.02
      pos = (0.45, -0.27)
      startVal [time (s)] = 0.0
      text = 非常确定
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  Routine confidence_1
    TextComponent confidence_T1_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = 您对刚才的可信度评分有多确定？
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    KeyboardComponent confidence_T1_keys
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent slider_confidence_t1
      image = slider.jpg
      pos = (0, -0.37)
      size = (0.9, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent confidence_T1_code
      Code Type = Both
      End JS Routine:
        // 处理置信度评分的按键响应
        var conf_rating = null;

        if (confidence_T1_keys.keys) {
            if (Array.isArray(confidence_T1_keys.keys)) {
                // 如果keys是数组，取最后一次按键
                if (confidence_T1_keys.keys.length > 0) {
                    var lastKey = confidence_T1_keys.keys[confidence_T1_keys.keys.length - 1];
                    conf_rating = parseInt(lastKey);
                }
            } else {
                // 如果keys是单个值
                conf_rating = parseInt(confidence_T1_keys.keys);
            }
        }

        // 初始化全局字典（如果尚未初始化）
        if (typeof T1_confidence === 'undefined') {
            T1_confidence = {};
        }

        // 保存确定性评分到全局字典
        window.T1_confidence[String(thisTrial['identity'])] = conf_rating;

        // 保存确定性评分到数据文件
        psychoJS.experiment.addData('confidence_T1', conf_rating);
      End Routine:
        if confidence_T1_keys.keys:
            conf_rating = int(confidence_T1_keys.keys)
        else:
            conf_rating = None

        # 保存确定性评分
        T1_confidence[str(thisTrial['identity'])] = conf_rating
        thisExp.addData('confidence_T1', conf_rating)
    TextComponent con1_one
      letterHeight = 0.02
      pos = (-0.45, -0.27)
      startVal [time (s)] = 0.0
      text = 非常不确定
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    TextComponent con1_three
      letterHeight = 0.02
      pos = (-0.225, -0.27)
      startVal [time (s)] = 0.0
      text = 比较不确定
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    TextComponent con1_five
      letterHeight = 0.02
      pos = (0, -0.27)
      startVal [time (s)] = 0.0
      text = 中立
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    TextComponent con1_seven
      letterHeight = 0.02
      pos = (0.225, -0.27)
      startVal [time (s)] = 0.0
      text = 比较确定
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    TextComponent con1_nine
      letterHeight = 0.02
      pos = (0.45, -0.27)
      startVal [time (s)] = 0.0
      text = 非常确定
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  Routine block_instru
    TextComponent block_instr_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        接下来是其中一位卖家的照片，
        请您判断是否愿意与其进行交易。

        请按空格键继续。
    KeyboardComponent block_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $thisExp.extraInfo['trials_file']
    loopType = random
    nReps = 1
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    Routine block_instru
    Routine fixation
    Routine image1
    Routine fixation
    Routine confidence_1
    Routine fixation
    Routine image2
    Routine fixation
    Routine confidence_2
  LoopTerminator trials
  Routine end
